<?xml version="1.0" encoding="utf-8"?>
<Parameters FOVx="256" FOVy="256" FOVz="1" Name="P" Nx="96" Ny="96" Nz="1" TE="70" TR="400">
   <ConcatSequence Name="R">
      <ConcatSequence Name="C" Observe="P,Ny" Repetitions="a1">
         <ATOMICSEQUENCE Name="A1">
            <HARDRFPULSE Axis="RF" Duration="0.1" FlipAngle="90" Name="P1"/>
         </ATOMICSEQUENCE>
         <DELAYATOMICSEQUENCE Delay="a1/2" DelayType="C2C" Name="D1" Observe="P,TE" StartSeq="A1" StopSeq="A1b"/>
         <ATOMICSEQUENCE Name="A2">
            <TRAPGRADPULSE Area="a1/2" Axis="GX" Name="P2" Observe="P4,Area"/>
            <TRAPGRADPULSE Area="-a1+a2*a3" Axis="GY" Name="P3" Observe="P,KMAXy/C,Counter/P,DKy"/>
         </ATOMICSEQUENCE>
         <ATOMICSEQUENCE Name="A1b">
            <HARDRFPULSE Axis="RF" Duration="50" FlipAngle="180" Name="P1b"/>
         </ATOMICSEQUENCE>
         <DELAYATOMICSEQUENCE Delay="a1/2" DelayType="C2C" Name="D1b" Observe="P,TE" StartSeq="A1b" StopSeq="A3"/>
         <ATOMICSEQUENCE Name="A3">
            <TRAPGRADPULSE ADCs="a2" Axis="GX" FlatTopArea="2*a1" FlatTopTime="4" Name="P4" Observe="P,KMAXx/P,Nx"/>
            <TRAPGRADPULSE Area="a1/2" Axis="GX" InitialDelay="a2" Name="P5" Observe="P4,Area/P4,EndOfFlatTop"/>
         </ATOMICSEQUENCE>
         <DELAYATOMICSEQUENCE Delay="a1" DelayType="B2E" Name="D2" Observe="P,TR" StartSeq="A1"/>
      </ConcatSequence>
   </ConcatSequence>
</Parameters>